PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = experiment
  keyboardBackend = ioHub
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Routines
  Routine baseline
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    CodeComponent baseline_code
      Code Type = Auto->JS
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      Begin Routine:
        random.shuffle(possible_positions)
        pos_baseline_circle1, pos_baseline_circle2, pos_baseline_circle3, pos_baseline_target = possible_positions
    PolygonComponent fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    PolygonComponent baseline_circle1
      fillColor = white
      pos [set every repeat] = pos_baseline_circle1
      saveStartStop = False
      shape = circle
      size = circle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    PolygonComponent baseline_circle2
      fillColor = $color
      lineColor = $color
      pos [set every repeat] = pos_baseline_circle2
      saveStartStop = False
      shape = circle
      size = circle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    PolygonComponent baseline_circle3
      fillColor = white
      pos [set every repeat] = pos_baseline_circle3
      shape = circle
      size = circle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    PolygonComponent baseline_target
      fillColor = white
      pos [set every repeat] = pos_baseline_target
      shape = rectangle
      size = rectangle_size
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
      units = pix
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    MouseComponent baseline_response
      clickable = baseline_target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
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  Routine load_variables
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        # variables that are constant for the experiment
        import random
        from numpy.random import choice
        import pandas as pd

        distractors = pd.read_csv('distractors.csv')
        images = distractors['image']
        fixation_size = (15, 15)
        circle_size = (70,70)
        rectangle_size = (70,70)
        color = "green"
        colors = ["red", "green", "blue"]
        image_size = (200, 200)
        possible_positions = [(0,250), (0,-250), (250, 0), (-250, 0)]
        conditions = ['present_emotional', 'present_neutral', 'absent_emotional', 'absent_neutral']
        weights = [1, 1, 1, 1]
      Begin Experiment:
        distractor_color = ""
        target_color = ""
        correct_response = ""
        current_condition = ""
        screen_components = []
        circle = ""
        target = ""
        distractor = ""
        neutral_red_square = ""
        perception_text = "In this task, you have to press the right arrow key if the white square is present and the left arrow key of the white square is absent as fast as possible."
        action_text = "You will be shown some circles and one white square surrounding an emotional picture. The white square is your target.  Your task is to click on the white square while ignoring the emotional picture. If the white square is not there on the screen then click on the centre of the screen."
        target_present = False
        image = ""
        code = ""
  Routine action
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    CodeComponent action_code
      Code Type = Auto->JS
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      Begin Routine:
        random.shuffle(possible_positions)
        pos_action_circle1, pos_action_circle2, pos_action_circle3, pos_action_target = possible_positions

        image = choice(images)
        code = image.split("/")[0]

        random.shuffle(conditions)
        current_condition = random.choices(conditions, weights=weights)[0]

        # componenets that make the
        if current_condition == "present_emotional":
            thisExp.addData("Target", "present")
            thisExp.addData("Phase", "action")
            thisExp.addData("Valence", code)
            for i in range(3):
                circle = visual.ShapeStim(
                win=win, name=f'circle_{i}',units='pix',
                size=circle_size, vertices='circle',
                ori=0.0, pos=possible_positions[i], anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
                opacity=None, depth=-3.0, interpolate=True)
                screen_components.append(circle)
            distractor = visual.ImageStim(
                win=win,
                name='distractor', units='pix',
                image=image, mask=None, anchor='center',
                ori=0.0, pos=(0, 0), size=image_size,
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=-6.0)
            screen_components.append(distractor)
            target = visual.Rect(
                win=win, name='target',units='pix',
                width=rectangle_size[0], height=rectangle_size[1],
                ori=0.0, pos=possible_positions[3], anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
                opacity=None, depth=-4.0, interpolate=True)
            screen_components.append(target)
        elif current_condition == "present_neutral":
            thisExp.addData("Target", "present")
            thisExp.addData("Phase", "action")
            thisExp.addData("Valence", "neutral")
            for i in range(3):
                circle = visual.ShapeStim(
                win=win, name=f'circle_{i}',units='pix',
                size=circle_size, vertices='circle',
                ori=0.0, pos=possible_positions[i], anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
                opacity=None, depth=-3.0, interpolate=True)
                screen_components.append(circle)
            target = visual.Rect(
                win=win, name='target',units='pix',
                width=rectangle_size[0], height=rectangle_size[1],
                ori=0.0, pos=possible_positions[3], anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
                opacity=None, depth=-4.0, interpolate=True)
            screen_components.append(target)
            neutral_red_square = visual.Rect(
                win=win, name='red_square', units='pix',
                width=image_size[0], height=image_size[1],
                ori=0.0, pos=(0, 0), anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='red', fillColor='red',
                opacity=None, depth=-8.0, interpolate=True)
            screen_components.append(neutral_red_square)
        elif current_condition == "absent_emotional":
            thisExp.addData("Target", "Absent")
            thisExp.addData("Phase", "action")
            thisExp.addData("Valence", code)
            for i in range(4):
                circle = visual.ShapeStim(
                win=win, name=f'circle_{i}',units='pix',
                size=circle_size, vertices='circle',
                ori=0.0, pos=possible_positions[i], anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
                opacity=None, depth=-3.0, interpolate=True)
                screen_components.append(circle)
            target = visual.ImageStim(
                win=win,
                name='target', units='pix',
                image=image, mask=None, anchor='center',
                ori=0.0, pos=(0, 0), size=image_size,
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=-6.0)
            screen_components.append(target)
        elif current_condition == 'absent_neutral':
            thisExp.addData("Target", "absent")
            thisExp.addData("Phase", "action")
            thisExp.addData("Valence", "neutral")
            for i in range(4):
                circle = visual.ShapeStim(
                win=win, name=f'circle_{i}',units='pix',
                size=circle_size, vertices='circle',
                ori=0.0, pos=possible_positions[i], anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
                opacity=None, depth=-3.0, interpolate=True)
                screen_components.append(circle)
            target = visual.Rect(
                win=win, name='target', units='pix',
                width=image_size[0], height=image_size[1],
                ori=0.0, pos=(0, 0), anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='red', fillColor='red',
                opacity=None, depth=-8.0, interpolate=True)
            screen_components.append(target)
        else:
            print("something went wrong, option is not available")

        for component in screen_components:
            component.setAutoDraw(True)
      End Routine:
        for component in screen_components:
            component.setAutoDraw(False)

        screen_components = []
    MouseComponent action_response
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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  Routine perception
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    CodeComponent perception_code
      Code Type = Auto->JS
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      Begin Routine:
        random.shuffle(possible_positions)
        pos_action_circle1, pos_action_circle2, pos_action_circle3, pos_action_target = possible_positions

        random.shuffle(conditions)
        current_condition = random.choices(conditions, weights=weights)[0]

        image = choice(images)
        code = image.split("/")[0]

        # componenets that make the
        if current_condition == "present_emotional":
            target_present = True
            thisExp.addData("Target", "present")
            thisExp.addData("Phase", "perception")
            thisExp.addData("Valence", code)
            for i in range(3):
                circle = visual.ShapeStim(
                win=win, name=f'circle_{i}',units='pix',
                size=circle_size, vertices='circle',
                ori=0.0, pos=possible_positions[i], anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
                opacity=None, depth=-3.0, interpolate=True)
                screen_components.append(circle)
            distractor = visual.ImageStim(
                win=win,
                name='distractor', units='pix',
                image=image, mask=None, anchor='center',
                ori=0.0, pos=(0, 0), size=image_size,
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=-6.0)
            screen_components.append(distractor)
            target = visual.Rect(
                win=win, name='target',units='pix',
                width=rectangle_size[0], height=rectangle_size[1],
                ori=0.0, pos=possible_positions[3], anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
                opacity=None, depth=-4.0, interpolate=True)
            screen_components.append(target)
        elif current_condition == "present_neutral":
            target_present = True
            thisExp.addData("Target", "present")
            thisExp.addData("Phase", "perception")
            thisExp.addData("Valence", "neutral")
            for i in range(3):
                circle = visual.ShapeStim(
                win=win, name=f'circle_{i}',units='pix',
                size=circle_size, vertices='circle',
                ori=0.0, pos=possible_positions[i], anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
                opacity=None, depth=-3.0, interpolate=True)
                screen_components.append(circle)
            target = visual.Rect(
                win=win, name='target',units='pix',
                width=rectangle_size[0], height=rectangle_size[1],
                ori=0.0, pos=possible_positions[3], anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
                opacity=None, depth=-4.0, interpolate=True)
            screen_components.append(target)
            neutral_red_square = visual.Rect(
                win=win, name='red_square', units='pix',
                width=image_size[0], height=image_size[1],
                ori=0.0, pos=(0, 0), anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='red', fillColor='red',
                opacity=None, depth=-8.0, interpolate=True)
            screen_components.append(neutral_red_square)
        elif current_condition == "absent_emotional":
            target_present = False
            thisExp.addData("Target", "Absent")
            thisExp.addData("Phase", "perception")
            thisExp.addData("Valence", code)
            for i in range(4):
                circle = visual.ShapeStim(
                win=win, name=f'circle_{i}',units='pix',
                size=circle_size, vertices='circle',
                ori=0.0, pos=possible_positions[i], anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
                opacity=None, depth=-3.0, interpolate=True)
                screen_components.append(circle)
            target = visual.ImageStim(
                win=win,
                name='target', units='pix',
                image=image, mask=None, anchor='center',
                ori=0.0, pos=(0, 0), size=image_size,
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=-6.0)
            screen_components.append(target)
        elif current_condition == 'absent_neutral':
            target_present = False
            thisExp.addData("Target", "absent")
            thisExp.addData("Phase", "perception")
            thisExp.addData("Valence", "neutral")
            for i in range(4):
                circle = visual.ShapeStim(
                win=win, name=f'circle_{i}',units='pix',
                size=circle_size, vertices='circle',
                ori=0.0, pos=possible_positions[i], anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='white', fillColor='white',
                opacity=None, depth=-3.0, interpolate=True)
                screen_components.append(circle)
            target = visual.Rect(
                win=win, name='target', units='pix',
                width=image_size[0], height=image_size[1],
                ori=0.0, pos=(0, 0), anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor='red', fillColor='red',
                opacity=None, depth=-8.0, interpolate=True)
            screen_components.append(target)
        else:
            print("something went wrong, option is not available")

        for component in screen_components:
            component.setAutoDraw(True)
      End Routine:
        for component in screen_components:
            component.setAutoDraw(False)

        thisExp.addData("target_present", target_present)
        if target_present == True:
            if perception_response.keys == 'right':
                correct_response = 1
                thisExp.addData("correct_response", 1)
            elif perception_response.keys == 'left':
                correct_response = 0
                thisExp.addData("correct_response", 0)
            else:
                print("response key is something else than left or right")
                thisExp.addData("correct_response", "error")
        elif target_present == False:
            if perception_response.keys == 'right':
                correct_response = 0
                thisExp.addData("correct_response", 0)
            elif perception_response.keys == 'left':
                correct_response = 1
                thisExp.addData("correct_response", 1)
            else:
                print("response key is something else than left or right")
                thisExp.addData("correct_response", "error")
        else:
            print("target is not present or absent")
            thisExp.addData("correct_response", "target error")

        screen_components = []
    KeyboardComponent perception_response
      allowedKeys = 'left','right'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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  Routine experiment_introduction
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    TextComponent experiment_intro_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        press 'spacebar' to continue.
    KeyboardComponent welcome_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine baseline_introduction
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    TextComponent baseline_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the experiment, you will be shown three circles and one sqaure. The sqaure is your target. your task is to click on the sqaure as fast as you can.

        press 'spacebar' to continue
    KeyboardComponent baseline_intro_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine action_introduction
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    TextComponent action_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $action_text + "\n" + "press 'spacebar' to continue"
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    KeyboardComponent action_intro_respone
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine perception_introduction
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    TextComponent perception_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $perception_text + "\n" + "press 'spacebar' to continue"
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    KeyboardComponent perception_intro_respone
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine thank_you
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    TextComponent thank_you_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = thank you for your participation. :))
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  Routine action_fixation_routine
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    PolygonComponent action_fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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  Routine perception_fixation_routine
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    PolygonComponent perception_fixation
      fillColor = white
      saveStartStop = False
      shape = cross
      size = fixation_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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Flow
  Routine load_variables
  Routine experiment_introduction
  Routine action_introduction
  LoopInitiator action_loop loopType="TrialHandler"
    loopType = random
    nReps = 90
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    conditions:
      [OrderedDict([('image', 'NegativeHA/2703.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/2811.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3000.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3001.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3005.1.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3010.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3015.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3016.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3030.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3051.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3053.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3059.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3060.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3062.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3063.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3064.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3068.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3069.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3071.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3080.jpg'), ('code', 'negative_HA')])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
    Routine action_fixation_routine
    Routine action
  LoopTerminator action_loop
  Routine perception_introduction
  LoopInitiator perception_loop loopType="TrialHandler"
    loopType = random
    nReps = 90
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    conditions:
      [OrderedDict([('image', 'NegativeHA/2703.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/2811.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3000.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3001.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3005.1.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3010.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3015.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3016.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3030.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3051.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3053.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3059.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3060.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3062.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3063.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3064.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3068.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3069.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3071.jpg'), ('code', 'negative_HA')]),
      OrderedDict([('image', 'NegativeHA/3080.jpg'), ('code', 'negative_HA')])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
    Routine perception_fixation_routine
    Routine perception
  LoopTerminator perception_loop
  Routine thank_you
